/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-31519.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "arm": "MTMR-31519.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-41878.xml",
            "pid": "sawControllersPID-MTML.xml",
            "arm": "MTML-41878.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "type": "TELEOP_PSM",
            "configure-parameter":
            {
                "rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000, -1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM2",
            "type": "TELEOP_PSM",
            "configure-parameter":
            {
                "rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000, -1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
