/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM_VF",
            "simulation": "KINEMATIC",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver-virtual-fixture.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM_HAPTICS",
            "io": "sawRobotIO1394-MTMR-31519.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "arm": "MTMR-31519.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "type": "TELEOP_PSM_HAPTICS",
            "configure-parameter":
            {
                "rotation" : [[-1.0000,  0.0000,  0.0000],
                              [ 0.0000, -1.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
