/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "simulation": "KINEMATIC",
            "kinematic": "suj-simulated.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM_VF",
            "io": "sawRobotIO1394-PSM1-28124.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver-virtual-fixture-realt.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM_VF",
            "io": "sawRobotIO1394-PSM2-33281.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver-virtual-fixture-realt.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM_HAPTICS",
            "io": "sawRobotIO1394-MTMR-31519.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "arm": "MTMR-31519.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM_HAPTICS",
            "io": "sawRobotIO1394-MTML-41878.xml",
            "pid": "sawControllersPID-MTML.xml",
            "arm": "MTML-41878.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "type": "TELEOP_PSM_HAPTICS"
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM2",
            "type": "TELEOP_PSM_HAPTICS"
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
